PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant_id'], expName, expInfo['date'], 'full' if expInfo['start_at_2nd_half'] else 'partial')
  Experiment info = {'participant_id': '', 'session': '001', 'inputType': 'b', 'start_at_2nd_half': 'n'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = -1.0000, -1.0000, -1.0000
  expName = change-your-mind
  keyboardBackend = ioHub
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Routines
  Routine code
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    CodeComponent declarations
      Code Type = Auto->JS
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      Begin Experiment:
        difficultTargetDuration=0.06
        responseKeys=[['b','index finger button'],['y','middle finger button']]
        if expInfo['inputType']=='k':
            responseKeys=[['t','T key'],['l','L key']]

        def generateTargetString(targetLetter, position):
            return position * 'X' + targetLetter + (7 - position) * 'X'

        def getTargetDuration(isDifficult):
            return difficultTargetDuration if isDifficult else 0.15

        def answeredCorrectly(targetLetter, responseKey):
            if targetLetter == 'T' and responseKey == keyForT():
                return True
            elif targetLetter == 'L' and responseKey == keyForL():
                return True
            return False

        def keyForT():
            return responseKeys[0][0]

        def keyForL():
            return responseKeys[1][0]

        def getFeedbackColor(isCorrect, accurateFeedback):
            if isCorrect:
                if accurateFeedback:
                    return "green"
                else:
                    return "red"
            elif accurateFeedback:
                return "red"
            return "green"

        def getFeedbackText(isCorrect, accurateFeedback):
            if isCorrect:
                if accurateFeedback:
                    return "+ correct +"
                else:
                    return "x wrong x"
            elif accurateFeedback:
                return "x wrong x"
            return "+ correct +"
  Routine instr_demo
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    TextboxComponent feedback_instr
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (1, 0.5)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 15
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      text:
        The computer will then provide you with feedback on your choice. The feedback may not always be 100% accurate.

        Immediately after the feedback the same trial will be presented again, so you will have the chance to change your mind if you wish.
    TextboxComponent textbox
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $"If you see the letter T, press the " + responseKeys[0][1] + ".\n\nIf you see the letter L, press the " + responseKeys[1][1] + "."
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    CodeComponent hide_mouse
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
  Routine landing_page
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    TextboxComponent upper_text
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.30)
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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      text:
        This task is comprised of a series of trials. On each trial you will see a fixation followed by a string of letters in the center of the screen.

        Please decide whether the string contains a T or an L.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent t_instructions
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.3, 0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Press " + responseKeys[0][1] + " if the letter was T."
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    TextboxComponent l_instructions
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.3, 0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = $"Press " + responseKeys[1][1] + " if the letter was L."
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    TextboxComponent lower_text
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.26)
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        The computer will then provide you with feedback on your choice. The feedback may not always be 100% accurate.

        Immediately after the feedback the same trial will be presented again, so you will have the chance to change your mind if you wish.

        Press the space bar to continue.
  Routine first_round
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    TextboxComponent fixation_one
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 1
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    TextboxComponent target
      bold = False
      durationEstim = 0.15
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $getTargetDuration(isDifficult)
      text [set every repeat] = $generateTargetString(targetLetter,targetLocation)
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    KeyboardComponent resp_one
      allowedKeys = responseKeys[0][0],responseKeys[1][0]
      correctAns = $responseKeys[0][0] if targetLetter=='T' else responseKeys[1][0]
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (frames)] = $120 + preFeedbackInterval
      storeCorrect = True
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    KeyboardComponent resp_other
      allowedKeys = 'g', 'r'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (frames)] = $120 + preFeedbackInterval
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    TextboxComponent target_masked
      bold = False
      durationEstim = 1.85
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = $getTargetDuration(isDifficult) + 0.5
      stopVal [duration (s)] = $2 - getTargetDuration(isDifficult)
      text = XXXXXXXX
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    TextboxComponent pre_feedback_delay_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [condition] = $target_masked.status==FINISHED
      stopVal [duration (frames)] = $preFeedbackInterval
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    CodeComponent update_target_duration
      Code Type = Auto->JS
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      End Routine:
        if isDifficult and resp_one.keys is not None:
            wasCorrect = answeredCorrectly(targetLetter, resp_one.keys[0])
            difficultTargetDuration += -0.01 if wasCorrect else 0.01
            if difficultTargetDuration > 0.15:
                difficultTargetDuration = 0.15
            elif difficultTargetDuration < 0.01:
                difficultTargetDuration = 0.01
  Routine display_feedback
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    TextboxComponent feedback
      bold = False
      color [set every repeat] = $"yellow" if resp_one.keys is None else getFeedbackColor(answeredCorrectly(targetLetter, resp_one.keys[0]),accurateFeedback)
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (2, 3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $"- no input -" if resp_one.keys is None else getFeedbackText(answeredCorrectly(targetLetter, resp_one.keys[0]),accurateFeedback)
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    TextboxComponent post_feedback_delay
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [condition] = $feedback.status==FINISHED
      stopVal [duration (frames)] = $postFeedbackInterval
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  Routine second_round
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    TextboxComponent fixation_two
      bold = False
      editable = False
      font = Consolas
      letterHeight = .18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 2
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    TextboxComponent target_two
      bold = False
      editable = False
      font = Consolas
      letterHeight = .18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $getTargetDuration(isDifficult)
      text [set every repeat] = $generateTargetString(targetLetter,targetLocation)
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    KeyboardComponent resp_two
      allowedKeys = $responseKeys[0][0], responseKeys[1][0]
      correctAns = $responseKeys[0][0] if targetLetter=='T' else responseKeys[1][0]
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      storeCorrect = True
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    TextboxComponent target_masked_two
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = $getTargetDuration(isDifficult) + 0.5
      stopVal [duration (s)] = $2 - getTargetDuration(isDifficult)
      text = XXXXXXXX
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    TextboxComponent intertrial_interval
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [condition] = $target_masked_two.status==FINISHED
      stopVal [duration (frames)] = $intertrialInterval
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  Routine intermission
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    TextboxComponent intermission_text
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = You will have a short break from the task now. The trials will resume in 30 seconds.
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    CodeComponent intermission_code
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 28:
            continueRoutine = True
        else:
            continueRoutine = False
    TextboxComponent countdown
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 25
      stopVal [duration (s)] = 5
      text [set every frame] = $round(30 - t)
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  Routine countdown_2
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    TextboxComponent countdown_3
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text [set every frame] = $round(5 - t)
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  Routine space_to_advance
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    TextboxComponent space_advance_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (1, 0.5)
      startVal [time (s)] = 0.5
      text = Examiner, please press the space bar to advance.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine waiting_on_scanner
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    TextboxComponent waiting_scanner_text
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (1, 0.5)
      startVal [time (s)] = 0
      text = Waiting for TTL pulse...
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    KeyboardComponent key_resp_3
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine button_box_test
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    TextboxComponent button_box_instr
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (1, 0.5)
      startVal [time (s)] = 0
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      text:
        Now, we'll have you test your button box to ensure that everything is working as expected.

        Press the index finger button now.
    KeyboardComponent index_test
      allowedKeys = 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine button_box_test_2
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    TextboxComponent button_box_instr_2
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (1, 0.5)
      startVal [time (s)] = 0.5
      text [set every repeat] = $f"Great!\nPress the middle finger button now."
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    KeyboardComponent key_resp_4
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine break_2
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        trialCount = -1
        breakTrial = 28
      Begin Routine:
        trialCount += 1
      Each Frame:
        continueRoutine = trialCount == breakTrial
    TextboxComponent break_instr
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
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      text [set every repeat]:
        You're halfway through! We'll take a short break now.
  Routine break_countdown
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    TextboxComponent countdown_4
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text [set every frame] = $round(5 - t)
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        continueRoutine = trialCount == breakTrial
  Routine waiting_on_scanner_after_break
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    CodeComponent code_5
      Code Type = Auto->JS
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      Each Frame:
        continueRoutine = trialCount == breakTrial
    TextboxComponent waiting_scanner_text_2
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (1, 0.5)
      startVal [time (s)] = 0
      text = Waiting for TTL pulse...
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    KeyboardComponent key_resp_6
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine code
  Routine instr_demo
  Routine button_box_test
  Routine button_box_test_2
  Routine space_to_advance
  Routine waiting_on_scanner
  Routine countdown_2
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $slice(0,56) if expInfo['start_at_2nd_half']=='n' else slice(28,56)
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('targetLetter', 'L'), ('isDifficult', 0), ('intertrialInterval', 141), ('preFeedbackInterval', 147), ('postFeedbackInterval', 98), ('accurateFeedback', 1), ('targetLocation', 5)]),
      OrderedDict([('targetLetter', 'T'), ('isDifficult', 0), ('intertrialInterval', 155), ('preFeedbackInterval', 122), ('postFeedbackInterval', 68), ('accurateFeedback', 1), ('targetLocation', 4)]),
      OrderedDict([('targetLetter', 'T'), ('isDifficult', 0), ('intertrialInterval', 140), ('preFeedbackInterval', 162), ('postFeedbackInterval', 94), ('accurateFeedback', 1), ('targetLocation', 5)]),
      OrderedDict([('targetLetter', 'T'), ('isDifficult', 0), ('intertrialInterval', 179), ('preFeedbackInterval', 147), ('postFeedbackInterval', 88), ('accurateFeedback', 1), ('targetLocation', 3)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 1), ('intertrialInterval', 158), ('preFeedbackInterval', 67), ('postFeedbackInterval', 67), ('accurateFeedback', 0), ('targetLocation', 2)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 1), ('intertrialInterval', 166), ('preFeedbackInterval', 109), ('postFeedbackInterval', 66), ('accurateFeedback', 1), ('targetLocation', 6)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 1), ('intertrialInterval', 136), ('preFeedbackInterval', 149), ('postFeedbackInterval', 176), ('accurateFeedback', 0), ('targetLocation', 3)])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
    Routine break_2
    Routine waiting_on_scanner_after_break
    Routine break_countdown
    Routine first_round
    Routine display_feedback
    Routine second_round
  LoopTerminator trials
